PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900,600]
  expName = word priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent Studytext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $test
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0,-0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'marble'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'board'},
      {'study_word': 'Chart'},
      {'study_word': 'Laptop'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'Pastry'},
      {'study_word': 'Case'},
      {'study_word': 'Police'},
      {'study_word': 'Keys'},
      {'study_word': 'Poster'},
      {'study_word': 'Cruise'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p', 'Reference': 'laptop', 'Old_new': 'old'},
      {'test': '_ha_t', 'Reference': 'chart', 'Old_new': 'old'},
      {'test': 'T_hi_t', 'Reference': 'Tshirt', 'Old_new': 'old'},
      {'test': '_ou_e', 'Reference': 'mouse', 'Old_new': 'old'},
      {'test': 'p_s_ry', 'Reference': 'pastry', 'Old_new': 'old'},
      {'test': 'c_s_', 'Reference': 'case', 'Old_new': 'old'},
      {'test': '_ru_s_', 'Reference': 'cruise', 'Old_new': 'old'},
      {'test': 'p_li_e', 'Reference': 'police', 'Old_new': 'old'},
      {'test': 'k_y_', 'Reference': 'keys', 'Old_new': 'old'},
      {'test': 'p_st_r', 'Reference': 'poster', 'Old_new': 'old'},
      {'test': '_o_rd', 'Reference': 'board', 'Old_new': 'old'},
      {'test': '_a_bl_', 'Reference': 'marble', 'Old_new': 'old'},
      {'test': '_ho_e', 'Reference': 'phone', 'Old_new': 'old'},
      {'test': '_oo_', 'Reference': 'book', 'Old_new': 'old'},
      {'test': 'c_s_io_', 'Reference': 'cushion', 'Old_new': 'old'},
      {'test': 'ta_l_', 'Reference': 'table', 'Old_new': 'new'},
      {'test': 'p_nc_l', 'Reference': 'pencil', 'Old_new': 'new'},
      {'test': 'v_s_', 'Reference': 'vase', 'Old_new': 'new'},
      {'test': 'bo_t_e', 'Reference': 'bottle', 'Old_new': 'new'},
      {'test': 'c_m_ra', 'Reference': 'camera', 'Old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
